instance = openMHA9-unaided

nchannels_in = 2
srate = 48000

mhalib = db
mha.fragsize = 48

mha.plugin_name = transducers

mha.transducers.calib_in.peaklevel = [130 130]
mha.transducers.calib_in.fir = [[]]
mha.transducers.calib_out.peaklevel = [130 130]
mha.transducers.calib_out.fir = [[]]
mha.transducers.calib_out.softclip.tau_attack = 0.002
mha.transducers.calib_out.softclip.tau_decay = 0.005
mha.transducers.calib_out.softclip.threshold = 0.6
mha.transducers.calib_out.softclip.slope = 0.5
mha.transducers.calib_out.softclip.tau_clip = 1
mha.transducers.calib_out.softclip.max_clipped = 1
mha.transducers.calib_out.do_clipping = no

mha.transducers.plugin_name = overlapadd

mha.transducers.overlapadd.fftlen = 384
mha.transducers.overlapadd.wnd.type = hanning
mha.transducers.overlapadd.wnd.user = []
mha.transducers.overlapadd.wnd.len = 192
mha.transducers.overlapadd.wnd.pos = 0.5
mha.transducers.overlapadd.wnd.exp = 1
mha.transducers.overlapadd.zerownd.type = rect
mha.transducers.overlapadd.zerownd.user = []

mha.transducers.overlapadd.plugin_name = mhachain
mha.transducers.overlapadd.mhachain.algos = [fftfilterbank dc combinechannels]

mha.transducers.overlapadd.mhachain.fftfilterbank.unit = Hz
mha.transducers.overlapadd.mhachain.fftfilterbank.f = [177 297 500 841 1414 2378 4000 6727 11314]
mha.transducers.overlapadd.mhachain.fftfilterbank.fscale = log
mha.transducers.overlapadd.mhachain.fftfilterbank.ovltype = rect
mha.transducers.overlapadd.mhachain.fftfilterbank.ftype = center
mha.transducers.overlapadd.mhachain.dc.gtdata = [[10 10 10 10 10 10 10 10 10 10 10 10 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10];[10 10 10 10 10 10 10 10 10 10 10 10 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10];[10 10 10 10 10 10 10 10 10 10 10 10 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10];[10 10 10 10 10 10 10 10 10 10 10 10 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10];[10 10 10 10 10 10 10 10 10 10 10 10 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10];[10 10 10 10 10 10 10 10 10 10 10 10 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10];[10 10 10 10 10 10 10 10 10 10 10 10 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10];[10 10 10 10 10 10 10 10 10 10 10 10 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10];[10 10 10 10 10 10 10 10 10 10 10 10 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10];[10 10 10 10 10 10 10 10 10 10 10 10 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10];[10 10 10 10 10 10 10 10 10 10 10 10 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10];[10 10 10 10 10 10 10 10 10 10 10 10 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10];[10 10 10 10 10 10 10 10 10 10 10 10 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10];[10 10 10 10 10 10 10 10 10 10 10 10 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10];[10 10 10 10 10 10 10 10 10 10 10 10 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10];[10 10 10 10 10 10 10 10 10 10 10 10 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10];[10 10 10 10 10 10 10 10 10 10 10 10 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10];[10 10 10 10 10 10 10 10 10 10 10 10 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10]]
mha.transducers.overlapadd.mhachain.dc.gtmin = [-10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10]
mha.transducers.overlapadd.mhachain.dc.gtstep = [1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1]
mha.transducers.overlapadd.mhachain.dc.tau_attack = [0.02]
mha.transducers.overlapadd.mhachain.dc.tau_decay = [0.1]
mha.transducers.overlapadd.mhachain.dc.fb = fftfilterbank
mha.transducers.overlapadd.mhachain.dc.chname = fftfilterbank_nchannels

mha.transducers.overlapadd.mhachain.combinechannels.outchannels = 2

