# This configuration file specifies signal dimensions and loads the trunk
# configuration.
#
# IO library is not loaded here. It should be loaded by the same file that
# loads this file, after loading this file.
#
# The configuration needs 4 input channels. The order of the the channels is:
# [0] : in-ear
# [1] : front BTE
# [2] : center BTE
# [3] : back BTE

nchannels_in = 4
srate = 44100

instance = MHA_APPP_2016-07

mhalib = transducers
mha.plugin_name = mhachain
mha.mhachain.algos = [altplugs:alt overlapadd:ola softclip]
mha.mhachain.softclip.start = 105
mha.mhachain.ola.fftlen=2048
mha.mhachain.ola.wnd.len=1024
mha.mhachain.ola.plugin_name = smoothgains_bridge:sg
mha.mhachain.ola.sg.plugin_name = multibandcompressor:mbc<hlcorr_ref.cfg

mha.mhachain.ola.sg.mbc.dc?read:fitting-compressive.cfg

mha.mhachain.alt.use_own_ac = yes
mha.mhachain.alt.plugs = [mhachain:1 ...
                          mhachain:2 ...
                          mhachain:3 ...
                         ]

mha.mhachain.alt.1?read:algo1.cfg # no processing - in ear
mha.mhachain.alt.2?read:algo2.cfg # no processing - front-mic
mha.mhachain.alt.3?read:algo3.cfg # directional microphones				
mha.mhachain.alt.select=2

mha.calib_in.peaklevel = 130
mha.calib_out.peaklevel = 130
mha.calib_out.fir = [[0.747400761 -0.0965726003 -0.221141756 -0.0531927831 -0.120032594 0.0378666222 -0.0245510284 0.0764478743 -0.0229101237 0.03136985 -0.0646698549 -0.00141995319 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-2.8339997e-07];[0.747400761 -0.0965726003 -0.221141756 -0.0531927831 -0.120032594 0.0378666222 -0.0245510284 0.0764478743 -0.0229101237 0.03136985 -0.0646698549 -0.00141995319 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-2.8339997e-07]]
